#include "AxyPrep_Mag.res"
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "ChannelPatternLibrary.hsl" }
global device ML_STAR ("AxyPrep_Mag.lay", "ML_STAR", hslTrue);
variable sim;
dialog customDialog_1;
variable vol_beadiso;
variable num_samples;
variable num_pipette_rounds;
variable num_pipette_rounds_base0;
variable BOOL_RESTART_TIME;
variable NO;
variable num_washes;
variable num_used_channels;
variable channel_pattern;
variable BOOL_RESTART_TIMER;
variable CANCEL;
variable ABORT;
variable OK;
variable counter_beadisosample;
variable counter_beadisosample_aspdispense;
variable single_channel_pattern;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    sim = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (sim != 1)
    {
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.tip_50, Translate("tc50"), Translate("50 uL Tips Edit"), 1, 999);
      TipCount::Edit2(ML_STAR.tip_300, Translate("tc300"), ML_STAR, 999);
      TipCount::Edit2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR, 999);
    }
    num_samples = 0;
    vol_beadiso = 0;
    num_washes = 0;
    OK = 1;
    CANCEL = 2;
    ABORT = 3;
    NO = 7;
    BOOL_RESTART_TIMER = 0;
    channel_pattern = Translate("00000000");
    num_used_channels = 0;
    single_channel_pattern = Translate("00000000");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    num_samples = customDialog_1.GetCustomDialogProperty( "button_numsamples.Value" );
    vol_beadiso = customDialog_1.GetCustomDialogProperty( "button_volbeadiso.Value" );
    num_pipette_rounds_base0 = num_samples / 8;
    num_pipette_rounds = num_pipette_rounds_base0 + 1;
    ChannelPatternLibrary::CreateChannelPattern(num_samples);
    {
      for(counter_beadisosample = 0; counter_beadisosample < num_pipette_rounds;)
      {
        counter_beadisosample = counter_beadisosample + 1;
        channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_beadisosample);
        num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_beadisosample);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(counter_beadisosample_aspdispense = 0; counter_beadisosample_aspdispense < num_used_channels;)
          {
            counter_beadisosample_aspdispense = counter_beadisosample_aspdispense + 1;
            single_channel_pattern = ChannelPatternLibrary::GetSingleChannel(counter_beadisosample_aspdispense);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
      }
    }
    VISUAL_NTR_LIBRARY::_ExitLibrary();
  } }
