private function CheckRetValue( variable retValue ) void ;
private function CheckTipSeq(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  if (sim != 1)
  {
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.tip_50, Translate("tc50"), ML_STAR.Waste, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 0, ML_STAR.tip_50, 0, 8, 0, 0, Translate("Please Reload 50uL Tips!"), 999);
    TipCount::Write2(ML_STAR.tip_300, Translate("tc300"), ML_STAR);
    TipCount::Write2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR);
  }
}

private function CheckRetValue( variable retValue ) void {
  if (retValue == ABORT)
  {
    abort;
  }
}

private function CheckTipSeq(  ) void {
  private dialog customDialog_1;
  private variable Tip50EndPos;
  private variable Tip300CurrentPos;
  private variable Tip300EndPos;
  private variable Tip50CurrentPos;
  private variable Tip300NewPos;
  private variable Tip300NewPost;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private variable Tip1000CurrentPos;
  private variable Tip1000NewPos;
  private variable Tip1000EndPos;
  private dialog customDialog_6;
  private variable Tip50NewPos;
  Tip50CurrentPos = ML_STAR.tip_50.GetCurrentPosition();
  Tip50NewPos = Tip50CurrentPos + num_samples;
  Tip50EndPos = ML_STAR.tip_50.GetCount();
  if (Tip50NewPos > Tip50EndPos)
  {
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    retValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(retValue);
    ML_STAR._219D8AAC_B0A8_43ba_979E_6E69201AC5EC("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"); // ReloadCarrier
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.tip_50, Translate("tc50"), Translate("50 uL Tips Edit"), 1, 999);
  }
  Tip300CurrentPos = ML_STAR.tip_300.GetCurrentPosition();
  Tip300NewPos = Tip300CurrentPos + num_samples;
  Tip300EndPos = ML_STAR.tip_300.GetCount();
  if (Tip300NewPos > Tip300EndPos)
  {
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    retValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(retValue);
    ML_STAR._219D8AAC_B0A8_43ba_979E_6E69201AC5EC("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"); // ReloadCarrier
    TipCount::Edit2(ML_STAR.tip_300, Translate("tc300"), ML_STAR, 999);
  }
  Tip1000CurrentPos = ML_STAR.tip_1000.GetCurrentPosition();
  Tip1000NewPos = Tip1000CurrentPos + num_samples;
  Tip1000EndPos = ML_STAR.tip_1000.GetCount();
  if (Tip1000NewPos > Tip1000EndPos)
  {
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    retValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(retValue);
    ML_STAR._219D8AAC_B0A8_43ba_979E_6E69201AC5EC("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"); // ReloadCarrier
    TipCount::Edit2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR, 999);
  }
}
